WorkflowBuilder(Version=2.5.0)
GroupWorkflow "Variables & Settings"
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> BehaviorSubject Random

    DoubleProperty(Value=0) => #2
    -> BehaviorSubject Hits
    #2 -> BehaviorSubject FalseAlarm
    #2 -> BehaviorSubject Miss
    #2 -> BehaviorSubject GoTrials
    #2 -> BehaviorSubject CorrectWithhold
    #2 -> BehaviorSubject NoGoTrials
    #2 -> BehaviorSubject TotalTrials
    #2 -> BehaviorSubject Response
    #2 -> IgnoreElements
    -> BehaviorSubject Licks
    #2 -> IgnoreElements
    -> BehaviorSubject NoLicks
    DoubleProperty(Value=0) => #15
    #15, #2 -> Zip
    -> IgnoreElements
    -> BehaviorSubject Epoch
    #2 -> BehaviorSubject LickCounter

    BooleanProperty(Value=false)
    -> IgnoreElements
    -> BehaviorSubject Abort

GroupWorkflow "Signal Settings"
    SubscribeSubject BehaviorCommands
    -> Bonsai.Harp.Device(PortName=COM3, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false) => #1
    -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port0) => #2
    SubscribeSubject Prefix => #3
    StringProperty(Value=raw_encoder_signal.csv) => #4
    #3, #4 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #7
    SubscribeSubject Prefix => #8
    StringProperty(Value=wheel_hi_res.csv) => #9
    #8, #9 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #12
    SubscribeSubject HarpTimestamp => #13
    #2, #13 -> WithLatestFrom
    -> DelaySubscription(DueTime=PT0.075S) => #15
    #15, #7 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\raw_encoder_signal.csv, Append=true, Overwrite=true, Suffix=None, IncludeHeader=false)
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Dsp.Rescale(Min=0, Max=5, RangeMin=0, RangeMax=62, RescaleType=Clamp) => #18
    Source2=#18 -> BehaviorSubject WheelPos => #19
    SubscribeSubject HarpTimestamp => #20
    #19, #20 -> WithLatestFrom => #21
    #21, #12 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\wheel_hi_res.csv, Append=true, Overwrite=true, Suffix=None, IncludeHeader=false)
    #18 -> Bonsai.Dsp.Difference(Order=1)
    -> DelaySubscription(DueTime=PT0.5S)
    -> Condition DetectTurnRestart
        WorkflowInput Source1
        -> LessThan(Operand=DoubleProperty(Value=-3))
        -> WorkflowOutput
    -> DoubleProperty(Value=1)
    -> First
    -> Repeat
    -> Accumulate
    -> Multiply(Operand=DoubleProperty(Value=61.11))
    -> MulticastSubject TurnPos
    #1 -> Bonsai.Harp.Parse(Type=Timestamp)
    -> PublishSubject HarpTimestamp

    SubscribeSubject TurnPos => #34
    SubscribeSubject WheelPos => #35
    #35, #34 -> WithLatestFrom
    -> Add
    -> Condition CleanSignal
        WorkflowInput Source1
        -> Bonsai.Dsp.Difference(Order=1)
        -> LessThan(Operand=DoubleProperty(Value=0.5))
        -> WorkflowOutput
    -> Condition CleanSignal#2
        WorkflowInput Source1
        -> Bonsai.Dsp.Difference(Order=1)
        -> GreaterThan(Operand=DoubleProperty(Value=-0.5))
        -> WorkflowOutput
    -> BehaviorSubject AbsolutePosition => #40
    SubscribeSubject Prefix => #41
    StringProperty(Value=abspos.csv) => #42
    #41, #42 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #45
    SubscribeSubject HarpTimestamp => #46
    #40, #46 -> WithLatestFrom
    -> DelaySubscription(DueTime=PT0.075S) => #48
    #48, #45 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\abspos.csv, Append=true, Overwrite=true, Suffix=None, IncludeHeader=false)

    DoubleProperty(Value=0)
    -> BehaviorSubject TurnPos

    Timer(DueTime=PT2S, Period=PT0S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital1)
    -> BehaviorSubject BehaviorCommands

    SubscribeSubject Epoch => #55
    SubscribeSubject Prefix => #56
    StringProperty(Value=epochlicktimestamp.csv) => #57
    #56, #57 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #60
    SubscribeSubject LickSignal => #61
    #55, #61 -> CombineLatest => #62
    #62, #60 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\epochlicktimestamp.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)

GroupWorkflow ScreenSettings
    Bonsai.Shaders.CreateWindow
      Width=300
      Height=300
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=0
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=white-noise
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=C:\Users\Utilizador\Documents\white-noise.jpg
          ColorType=Unchanged
          FlipMode=nil
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90)
    -> BehaviorSubject Draw

GroupWorkflow "Stimuli Series"
    GroupWorkflow ITI => #0
        SubscribeSubject Draw => #0
        SubscribeSubject AbsolutePosition
        -> Multiply(Operand=DoubleProperty(Value=-3))
        -> PropertyMapping(Phase) => #3
        #0, #3 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=-7500
          LocationY=0
          Angle=0
          SpatialFrequency=0.05
          TemporalFrequency=0
          Phase=-396440.844
          SquareWave=false
          Contrast=1
          Radius=1
          Aperture=0.5
          Opacity=1
          ExtentX=100
          ExtentY=100

        SubscribeSubject Random
        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=8, Upper=12)
        -> Bonsai.Numerics.Distributions.Sample
        -> BehaviorSubject "ITI Distance" => #8
        SubscribeSubject Prefix => #9
        StringProperty(Value=iti_distance.csv) => #10
        #9, #10 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #13
        #8, #13 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\iti_distance.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)

        SubscribeSubject AbsolutePosition
        -> Bonsai.Dsp.Difference(Order=1)
        -> Accumulate
        -> Condition
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform
          Expression: single(it)
        -> BehaviorSubject ITI
        -> TakeWhile
            WorkflowInput Source1 => #0
            SubscribeSubject "ITI Distance"
            -> PropertyMapping(Value) => #2
            #0, #2 -> LessThan(Operand=FloatProperty(Value=8))
            -> WorkflowOutput
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> Unit
        -> WorkflowOutput

        DoubleProperty(Value=0) => #25
        SubscribeSubject HarpTimestamp => #26
        #26, #25 -> CombineLatest
        -> MulticastSubject Epoch

        SubscribeSubject Lick => #29
        -> Condition
            WorkflowInput Source1
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> DoubleProperty(Value=1)
        #29 -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> DoubleProperty(Value=0)
    GroupWorkflow Cue => #1
        SubscribeSubject Draw
        -> Bonsai.Shaders.SampleOnRenderFrame => #1
        SubscribeSubject AbsolutePosition => #2
        SubscribeSubject Random
        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample => #5
        -> Condition Go
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> SelectMany RandomCueSide => #7
            SubscribeSubject Random
            -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> WorkflowOutput
        -> Condition LeftChange => #8
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> DoubleProperty(Value=-120) => #9
        #8 -> DoubleProperty(Value=-1) => #10
        #7 -> Condition RightChange => #11
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> DoubleProperty(Value=120) => #12
        #11 -> DoubleProperty(Value=1) => #13
        #5 -> Condition NoGo => #14
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> SelectMany RandomCueSide => #15
            SubscribeSubject Random
            -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> WorkflowOutput
        -> Condition LeftChange => #16
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> DoubleProperty(Value=-1) => #17
        #16 -> DoubleProperty(Value=-120) => #18
        #15 -> Condition RightChange => #19
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> DoubleProperty(Value=1) => #20
        #10, #13, #17, #20 -> Merge
        -> PropertyMapping(Value) => #22
        #2, #22 -> Multiply(Operand=DoubleProperty(Value=-1))
        -> PropertyMapping(Phase) => #24
        #19 -> DoubleProperty(Value=120) => #25
        #9, #12, #25, #18 -> Amb
        -> PropertyMapping(LocationX) => #27
        #1, #24, #27 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=-120
          LocationY=0
          Angle=0
          SpatialFrequency=0.05
          TemporalFrequency=0
          Phase=-132840.969
          SquareWave=false
          Contrast=1
          Radius=1
          Aperture=0.5
          Opacity=1
          ExtentX=100
          ExtentY=100
        #14 -> DoubleProperty(Value=0) => #29
        #10, #13, #29 -> Merge
        -> BehaviorSubject "Cue Side"
        SubscribeSubject Prefix => #32
        StringProperty(Value=trial_type.csv) => #33
        #32, #33 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #36
        #5, #36 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\trial_type.csv, Append=true, Overwrite=true, Suffix=None, IncludeHeader=false)

        SubscribeSubject Random
        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=10, Upper=15)
        -> Bonsai.Numerics.Distributions.Sample
        -> BehaviorSubject "Cue Distance" => #41
        SubscribeSubject Prefix => #42
        StringProperty(Value=cue_distance.csv) => #43
        #42, #43 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #46
        #41, #46 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\cue_distance.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)

        SubscribeSubject AbsolutePosition => #48
        SubscribeSubject Lick
        -> Condition => #50
            WorkflowInput Source1
            -> WorkflowOutput
        #48, #50 -> TriggeredWindow(Count=nil)
        -> SelectMany
            WorkflowInput Source1 => #0
            Source2=#0 -> Bonsai.Dsp.Difference(Order=1)
            -> Accumulate
            -> Condition
                WorkflowInput Source1
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
            -> Bonsai.Scripting.ExpressionTransform
              Expression: single(it)
            -> BehaviorSubject Cue
            -> WorkflowOutput
        -> TakeWhile
            WorkflowInput Source1 => #0
            SubscribeSubject "Cue Distance"
            -> PropertyMapping(Value) => #2
            #0, #2 -> LessThan(Operand=FloatProperty(Value=12))
            -> WorkflowOutput
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> Unit
        -> WorkflowOutput

        DoubleProperty(Value=1) => #57
        SubscribeSubject HarpTimestamp => #58
        #58, #57 -> CombineLatest
        -> MulticastSubject Epoch
    GroupWorkflow Delay => #2
        SubscribeSubject Draw
        -> Bonsai.Shaders.SampleOnRenderFrame => #1
        SubscribeSubject AbsolutePosition => #2
        -> Multiply(Operand=DoubleProperty(Value=-1))
        -> PropertyMapping(Phase) => #4
        #1, #4 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=-120
          LocationY=0
          Angle=0
          SpatialFrequency=0.05
          TemporalFrequency=0
          Phase=-133420.484
          SquareWave=false
          Contrast=1
          Radius=1
          Aperture=0.5
          Opacity=1
          ExtentX=100
          ExtentY=100
        #2 -> Multiply(Operand=DoubleProperty(Value=1))
        -> PropertyMapping(Phase) => #7
        SubscribeSubject Draw
        -> Bonsai.Shaders.SampleOnRenderFrame => #9
        #9, #7 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=120
          LocationY=0
          Angle=0
          SpatialFrequency=0.05
          TemporalFrequency=0
          Phase=133420.484
          SquareWave=false
          Contrast=1
          Radius=1
          Aperture=0.5
          Opacity=1
          ExtentX=100
          ExtentY=100

        SubscribeSubject Random
        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=10, Upper=15)
        -> Bonsai.Numerics.Distributions.Sample
        -> Amb
        -> BehaviorSubject "Delay Distance" => #15
        SubscribeSubject Prefix => #16
        StringProperty(Value=delay_distance.csv) => #17
        #16, #17 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #20
        #15, #20 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\delay_distance.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)

        SubscribeSubject AbsolutePosition => #22
        SubscribeSubject Lick
        -> Condition => #24
            WorkflowInput Source1
            -> WorkflowOutput
        #22, #24 -> TriggeredWindow(Count=nil)
        -> SelectMany
            WorkflowInput Source1
            -> Bonsai.Dsp.Difference(Order=1)
            -> Accumulate
            -> Condition
                WorkflowInput Source1
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
            -> Bonsai.Scripting.ExpressionTransform
              Expression: single(it)
            -> BehaviorSubject Delay
            -> WorkflowOutput
        -> TakeWhile
            WorkflowInput Source1 => #0
            SubscribeSubject "Delay Distance"
            -> PropertyMapping(Value) => #2
            #0, #2 -> LessThan(Operand=FloatProperty(Value=10))
            -> WorkflowOutput
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> Unit
        -> WorkflowOutput

        DoubleProperty(Value=2) => #31
        SubscribeSubject HarpTimestamp => #32
        #32, #31 -> CombineLatest
        -> MulticastSubject Epoch
    GroupWorkflow Test => #3
        SubscribeSubject Draw
        -> Bonsai.Shaders.SampleOnRenderFrame => #1
        SubscribeSubject AbsolutePosition => #2
        -> Multiply(Operand=DoubleProperty(Value=-1))
        -> PropertyMapping(Phase) => #4
        #2 -> Multiply(Operand=DoubleProperty(Value=1))
        -> PropertyMapping(Phase) => #6
        SubscribeSubject Draw
        -> Bonsai.Shaders.SampleOnRenderFrame => #8
        SubscribeSubject "Cue Side" => #9
        GroupWorkflow "Test Side"
            SubscribeSubject Random
            -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=3)
            -> Bonsai.Numerics.Distributions.Sample => #2
            -> Condition "Valid Cue" => #3
                WorkflowInput Source1
                -> LessThanOrEqual(Operand=IntProperty(Value=3))
                -> WorkflowOutput
            SubscribeSubject "Cue Side" => #4
            #4, #3 -> Sample => #5
            #2 -> Condition "Invalid Cue" => #6
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            #4, #6 -> Sample
            -> Multiply(Operand=IntProperty(Value=-1)) => #8
            #5, #8 -> Merge
            -> WorkflowOutput
        -> BehaviorSubject "Test Side" => #11
        #9, #11 -> Zip => #12
        -> Condition Go => #13
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Condition "Left Side"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=IntProperty(Value=-1))
            -> WorkflowOutput
        -> SelectMany GratingProperties => #15
            WorkflowInput Source1
            -> Bonsai.Shaders.CreateVector2(X=-45, Y=0)
            -> WorkflowOutput
        -> MemberSelector(Selector=X) => #16
        #15 -> MemberSelector(Selector=Y) => #17
        #13 -> Condition "Right Side"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> SelectMany GratingProperties => #19
            WorkflowInput Source1
            -> Bonsai.Shaders.CreateVector2(X=0, Y=45)
            -> WorkflowOutput
        -> MemberSelector(Selector=X) => #20
        #19 -> MemberSelector(Selector=Y) => #21
        #12 -> Condition NoGo
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> SelectMany GratingProperties => #23
            WorkflowInput Source1
            -> Bonsai.Shaders.CreateVector2(X=0, Y=0)
            -> WorkflowOutput
        -> MemberSelector(Selector=X) => #24
        #16, #24, #20 -> Merge
        -> Bonsai.Numerics.DegreeToRadian
        -> PropertyMapping(Angle) => #27
        #1, #4, #27 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=-120
          LocationY=0
          Angle=-45
          SpatialFrequency=0.05
          TemporalFrequency=0
          Phase=-133550.156
          SquareWave=false
          Contrast=1
          Radius=1
          Aperture=0.5
          Opacity=1
          ExtentX=100
          ExtentY=100
        #23 -> MemberSelector(Selector=Y) => #29
        #17, #29, #21 -> Merge
        -> Bonsai.Numerics.DegreeToRadian
        -> PropertyMapping(Angle) => #32
        #8, #6, #32 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=120
          LocationY=0
          Angle=0
          SpatialFrequency=0.05
          TemporalFrequency=0
          Phase=133550.156
          SquareWave=false
          Contrast=1
          Radius=1
          Aperture=0.5
          Opacity=1
          ExtentX=100
          ExtentY=100

        SubscribeSubject Random
        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=20, Upper=25)
        -> Bonsai.Numerics.Distributions.Sample
        -> BehaviorSubject "Test Distance" => #37
        SubscribeSubject Prefix => #38
        StringProperty(Value=test_distance.csv) => #39
        #38, #39 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #42
        #37, #42 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\test_distance.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)

        SubscribeSubject AbsolutePosition
        -> Bonsai.Dsp.Difference(Order=1)
        -> Accumulate
        -> Condition
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Scripting.ExpressionTransform
          Expression: single(it)
        -> BehaviorSubject Test
        -> TakeWhile
            WorkflowInput Source1 => #0
            SubscribeSubject "Test Distance"
            -> PropertyMapping(Value) => #2
            #0, #2 -> LessThan(Operand=FloatProperty(Value=24))
            -> WorkflowOutput
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> Unit => #52
        -> WorkflowOutput
        #52 -> GroupWorkflow "Test Result" => #54
            WorkflowInput Source1
            -> Last
            -> BooleanProperty(Value=false) => #2
            SubscribeSubject "Cue Side" => #3
            BooleanProperty(Value=true)
            -> First => #5
            #2, #5 -> Amb => #6
            #6, #3 -> Zip => #7
            -> Condition Go => #8
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> NotEqual(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Condition Lick
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> WorkflowOutput
            -> Sink Reward
                WorkflowInput Source1
                -> Delay(DueTime=PT0.65S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
                -> MulticastSubject BehaviorCommands
                -> WorkflowOutput
            -> DoubleProperty(Value=1) => #11
            #8 -> Condition "No Lick"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> BitwiseNot
                -> WorkflowOutput
            -> Sink NoReward
                WorkflowInput Source1
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
                -> MulticastSubject BehaviorCommands
                -> WorkflowOutput
            -> DoubleProperty(Value=-1) => #14
            #7 -> Condition NoGo => #15
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Condition Lick
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> WorkflowOutput
            -> Sink NoReward
                WorkflowInput Source1
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
                -> MulticastSubject BehaviorCommands
                -> WorkflowOutput
            -> DoubleProperty(Value=-2) => #18
            #15 -> Condition "No Lick"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> BitwiseNot
                -> WorkflowOutput
            -> Sink NoReward
                WorkflowInput Source1
                -> WorkflowOutput
            -> DoubleProperty(Value=2) => #21
            #11, #14, #18, #21 -> Merge
            -> BehaviorSubject "Test Result"
            -> WorkflowOutput
        SubscribeSubject Prefix => #55
        StringProperty(Value=testresult.csv) => #56
        #55, #56 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #59
        #54, #59 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\testresult.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)

        DoubleProperty(Value=3) => #61
        SubscribeSubject HarpTimestamp => #62
        #62, #61 -> CombineLatest
        -> MulticastSubject Epoch
    #0, #1, #2, #3 -> Concat
    -> Last
    -> Repeat
    -> Last
    -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital1)
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT2S)

GroupWorkflow "Camera Settings"
    Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default, NumBuffers=10, GrabMode=BufferFrames) => #0
    SubscribeSubject Threshold
    -> PropertyMapping(Value) => #2
    SubscribeSubject Prefix => #3
    StringProperty(Value=ptgrey.csv) => #4
    #3, #4 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #7
    #0, #7 -> Bonsai.IO.CsvWriter
      FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\ptgrey.csv
      Append=false
      Overwrite=true
      Suffix=None
      IncludeHeader=false
      Selector="Metadata.embeddedTimeStamp,Metadata.embeddedFrameCounter"
    -> MemberSelector(Selector=Image) => #9
    -> Bonsai.Vision.Crop(RegionOfInterest(X=234, Y=103, Width=31, Height=31)) => #10
    SubscribeSubject Prefix => #11
    StringProperty(Value=lick.avi) => #12
    #11, #12 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #15
    SubscribeSubject Prefix => #16
    StringProperty(Value=eye.avi) => #17
    #16, #17 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #20
    #10, #20 -> Bonsai.Vision.VideoWriter
      FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\eye.avi
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #9 -> Bonsai.Vision.Crop(RegionOfInterest(X=305, Y=172, Width=17, Height=17)) => #22
    #22, #15 -> Bonsai.Vision.VideoWriter
      FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\lick.avi
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=1, ThresholdValue=0.05, ThresholdType=Binary, SubtractionMethod=Absolute)
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0) => #26
    #26, #2 -> GreaterThan(Operand=DoubleProperty(Value=72700)) => #27
    -> Disable DistinctUntilChanged
    -> Disable Condition High => #29
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Prefix => #30
    StringProperty(Value=full.avi) => #31
    #30, #31 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #34
    Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
    -> BooleanProperty(Value=true) => #36
    #29, #36 -> Amb
    -> PublishSubject Lick
    #27 -> BehaviorSubject LickSignal
    #27 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    -> DoubleProperty(Value=1)
    -> Condition
        SubscribeSubject Epoch
        -> MemberSelector(Selector=Item2)
        -> NotEqual(Operand=DoubleProperty(Value=3))
        -> WorkflowOutput
    -> Accumulate
    -> MulticastSubject LickCounter
    #9, #34 -> Bonsai.Vision.VideoWriter
      FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\full.avi
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

    DoubleProperty(Value=72700)
    -> PublishSubject Threshold => #47
    SubscribeSubject Prefix => #48
    StringProperty(Value=roi.csv) => #49
    #48, #49 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #52
    #47, #52 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\roi.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)

GroupWorkflow "Trial Results"
    SubscribeSubject "Test Result" => #0
    -> Condition Go&Lick => #1
        WorkflowInput Source1
        -> Equal(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    -> DoubleProperty(Value=1)
    -> Accumulate
    -> MulticastSubject Hits
    #0 -> Condition Go&NoLick => #5
        WorkflowInput Source1
        -> Equal(Operand=DoubleProperty(Value=-1))
        -> WorkflowOutput
    -> DoubleProperty(Value=1)
    -> Accumulate
    -> MulticastSubject Miss
    #1, #5 -> Merge => #9
    -> DoubleProperty(Value=1)
    -> Accumulate
    -> MulticastSubject GoTrials
    #0 -> Condition NoGo&Lick => #13
        WorkflowInput Source1
        -> Equal(Operand=DoubleProperty(Value=-2))
        -> WorkflowOutput
    -> DoubleProperty(Value=1)
    -> Accumulate
    -> MulticastSubject FalseAlarm
    #1, #13 -> Merge
    -> DoubleProperty(Value=1)
    -> MulticastSubject Licks
    #0 -> Condition NoGo&NoLick => #20
        WorkflowInput Source1
        -> Equal(Operand=DoubleProperty(Value=2))
        -> WorkflowOutput
    -> DoubleProperty(Value=1)
    -> Accumulate
    -> MulticastSubject CorrectWithhold
    #13, #20 -> Merge => #24
    -> DoubleProperty(Value=1)
    -> Accumulate
    -> MulticastSubject NoGoTrials
    #9, #24 -> Merge
    -> DoubleProperty(Value=1)
    -> Accumulate
    -> MulticastSubject TotalTrials
    #5, #20 -> Merge
    -> DoubleProperty(Value=0)
    -> MulticastSubject NoLicks

    SubscribeSubject GoTrials => #35
    SubscribeSubject Hits => #36
    #36, #35 -> CombineLatest
    -> SampleInterval(Interval=PT0.001S)
    -> Divide
    -> SampleInterval(Interval=PT0.001S)
    -> PublishSubject HitRate => #41
    SubscribeSubject FalseAlarm => #42
    SubscribeSubject NoGoTrials => #43
    #42, #43 -> CombineLatest
    -> SampleInterval(Interval=PT0.001S)
    -> Divide
    -> SampleInterval(Interval=PT0.001S)
    -> PublishSubject FalseAlarmRate => #48
    #41, #48 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform => #50
      Expression: new(Item1 as HitRate, Item2 as FalseAlarmRate)
    -> MemberSelector(Selector=HitRate) => #51
    #50 -> MemberSelector(Selector=FalseAlarmRate) => #52
    #51, #52 -> Zip
    -> BehaviorSubject Performance

    SubscribeSubject Licks => #55
    SubscribeSubject NoLicks => #56
    #55, #56 -> Merge
    -> MulticastSubject Response => #58
    SubscribeSubject "Cue Side" => #59
    SubscribeSubject "Test Side" => #60
    #59, #60, #58 -> Zip => #61
    SubscribeSubject Prefix => #62
    StringProperty(Value=response.csv) => #63
    #62, #63 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #66
    #61, #66 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\response.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)

    SubscribeSubject Performance
    -> Bonsai.Scripting.ExpressionTransform PERFORMANCE => #69
      Expression: new(Item1 as HitRate, Item2 as FalseAlarmRate)
    SubscribeSubject Prefix => #70
    StringProperty(Value=performance.csv) => #71
    #70, #71 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #74
    #69, #74 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\performance.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)

StringProperty(Value=D:\Behavior_data_wheeled_task\)
-> BehaviorSubject Path => #7
StringProperty(Value=RM_09\)
-> BehaviorSubject "Mouse Name" => #9
StringProperty(Value=17-12-2020)
-> BehaviorSubject Date => #11
StringProperty(Value=\) => #12
#7, #9, #11, #12 -> Zip
-> Add
-> ReplaySubject Prefix(BufferSize=nil)

SubscribeSubject "Mouse Name" => #16
SubscribeSubject Prefix => #17
StringProperty(Value=\) => #18
StringProperty(Value=mouse_name.csv) => #19
#17, #18, #19 -> Zip
-> Add
-> PropertyMapping(FileName) => #22
#22, #16 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\\mouse_name.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)

Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
-> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
-> MulticastSubject BehaviorCommands

SubscribeSubject Prefix => #27
StringProperty(Value=task_type.csv) => #28
#27, #28 -> Zip
-> Add
-> PropertyMapping(FileName) => #31
StringProperty(Value=valid_vs_invalid_cue_always_go_lick_for_water) => #32
#31, #32 -> Bonsai.IO.CsvWriter(FileName=D:\Behavior_data_wheeled_task\RM_09\17-12-2020\task_type.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
